begintemplate cell_313862022
public init, connect_sections, size_sections, append_sections, define_synapses
public mechinit, insert_mechs, set_biophys, get_root
public  pre_list, connect_pre, is_art, is_connected, gid, randi
public soma, dend, axon, apic
public all, basal_list, apical_list, soma_list, axon_list, dendrite_list
public x, y, z, position, myroot, myrootsec, Vrest
public NumSoma, NumApical, NumBasal, NumAxon, NumDend
public gna12_ais_max, gna16_ais_max, gkv_axon, gNav_soma, gKdr_soma, gKdr_dend, gNav_dend

// strings
strdef myroot, myname

// objects
objref syn, pre_list, templist, rootlist, myrootsec, this, rr, rv

// external variables
//external numCellTypes, cellType

// create the sections[segments]
myname = "cell_313862022"

create soma, apic[43], dend[43], axon[2]



proc init() {
	//gid = $1
	//randi = $2
	
	// morphology
	connect_sections()	// local fcn: connect soma, dendrites, axon initial segment
	size_sections()		// local fcn: set the size dimensions of each section
	define_shape()		// builtin fcn: fill in 3d info for sections defined by only L and diam, translate 3d points for consistency with their connections 
  	append_sections()	// local fcn: append all sections to the section list
	set_nseg()			// local fcn: set the number of segments in each section
	//get_root()			// local fcn: perform morphology checks
	
	// electrophysiology
	mechinit()			// local fcn: set values for max conductances and reversal potentials of ion channels and other ephys parameters that are subject to fitting
	insert_mechs()		// local fcn: insert ion channels and actually set values determined in the mechinit fcn
	set_chanparams()	// local fcn: after all channels have been inserted, then their other parameters can be set	

	// synapses
	pre_list = new List() // define a list for the presynaptic connections	
	//define_synapses($3)	// local fcn: define all possible synaptic connections received by this cell
}


proc connect_sections() {local i
  connect apic(0), soma(0.5)
  for i = 1, 5 connect apic[i](0), apic[i-1](1)
  connect apic[6](0), apic[4](1)
  connect apic[7](0), apic[3](1)
  connect apic[8](0), apic[2](1)
  for i = 9, 10 connect apic[i](0), apic[i-1](1)
  connect apic[11](0), apic[9](1)
  for i = 12, 13 connect apic[i](0), apic[11](1)
  for i = 14, 16 connect apic[i](0), apic[i-1](1)
  connect apic[17](0), apic[15](1)
  connect apic[18](0), apic[14](1)
  connect apic[19](0), apic[13](1)
  for i = 20, 21 connect apic[i](0), apic[i-1](1)
  connect apic[22](0), apic[20](1)
  connect apic[23](0), apic[19](1)
  connect apic[24](0), apic[8](1)
  for i = 25, 26 connect apic[i](0), apic[24](1)
  connect apic[27](0), apic[1](1)
  connect apic[28](0), apic(1)
  for i = 29, 30 connect apic[i](0), apic[i-1](1)
  connect apic[31](0), apic[29](1)
  for i = 32, 33 connect apic[i](0), apic[i-1](1)
  connect apic[34](0), apic[32](1)
  connect apic[35](0), apic[31](1)
  connect apic[36](0), apic[28](1)
  for i = 37, 38 connect apic[i](0), apic[i-1](1)
  connect apic[39](0), apic[37](1)
  for i = 40, 41 connect apic[i](0), apic[39](1)
  connect apic[42](0), apic[36](1)
  connect dend(0), soma(0.5)
  for i = 1, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  connect dend[8](0), dend[2](1)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  connect dend[11](0), dend[1](1)
  for i = 12, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), dend[11](1)
  for i = 20, 21 connect dend[i](0), dend[19](1)
  connect dend[22](0), dend(1)
  connect dend[23](0), soma(0.5)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), soma(0.5)
  for i = 28, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  connect dend[33](0), dend[27](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[35](1)
  for i = 40, 42 connect dend[i](0), soma(0.5)
  connect axon[0](0), soma(0.5)
  connect axon[1](0), axon[0](1)
}


proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(265.61, 535.163, 25.2, 14.4686)
	pt3dadd(272.844, 535.163, 25.2, 14.4686)
	pt3dadd(280.078, 535.163, 25.2, 14.4686)
  }
  apic {pt3dclear()
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  }
}
proc shape3d_2() {
  apic[9] {	pt3dadd(290.625, 508.791, 29.9415, 1.0678)
	pt3dadd(291.622, 508.261, 29.6937, 1.0932)
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  }
}
proc shape3d_3() {
  apic[11] {	pt3dadd(368.541, 391.993, 44.24, 0.6102)
	pt3dadd(368.611, 390.867, 44.2389, 0.5592)
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  }
}
proc shape3d_4() {
  apic[11] {	pt3dadd(458.592, 234.062, 81.0132, 0.5338)
	pt3dadd(459.087, 233.834, 81.2, 0.5592)
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  }
}
proc shape3d_5() {
  apic[16] {	pt3dadd(536.638, 159.232, 114.52, 0.2288)
	pt3dadd(536.74, 158.991, 114.52, 0.2288)
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  }
}
proc shape3d_6() {
  apic[23] {	pt3dadd(470.483, 174.294, 125.789, 0.4576)
  }
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  }
}
proc shape3d_7() {
  apic[28] {	pt3dadd(280.166, 528.077, 31.8746, 0.8136)
	pt3dadd(281.01, 528.799, 31.4437, 0.788)
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  }
}
proc shape3d_8() {
  apic[40] {	pt3dadd(369.549, 583.955, 19.9338, 0.356)
	pt3dadd(370.643, 583.622, 19.9338, 0.2288)
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  }
}
proc shape3d_9() {
  dend[9] {	pt3dadd(285.123, 652.423, 30.4268, 0.3304)
	pt3dadd(284.742, 652.766, 29.96, 0.3304)
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  }
}
proc shape3d_10() {
  dend[19] {	pt3dadd(342.819, 576.271, 35.56, 0.483)
	pt3dadd(343.175, 576.678, 35.4668, 0.483)
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  }
}
proc shape3d_11() {
  dend[25] {	pt3dadd(279.365, 561.704, 38.08, 0.5848)
	pt3dadd(279.975, 562.238, 38.64, 0.8644)
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  }
}
proc shape3d_12() {
  dend[30] {	pt3dadd(167.946, 508.611, 34.4285, 0.4322)
	pt3dadd(166.854, 508.553, 35.1711, 0.483)
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  }
}
proc shape3d_13() {
  dend[37] {  }
  dend[38] {pt3dclear()
	pt3dadd(223.499, 566.557, 37.1182, 0.6864)
	pt3dadd(224.534, 561.532, 37.8056, 0.356)
	pt3dadd(225.053, 558.409, 40.5549, 0.305)
	pt3dadd(224.866, 549.745, 45.3667, 0.305)
	pt3dadd(225.207, 545.299, 47.4286, 0.2288)
  }
  dend[39] {pt3dclear()
	pt3dadd(227.073, 566.919, 37.1182, 0.4576)
	pt3dadd(224.524, 569.559, 35.056, 0.3304)
	pt3dadd(223.825, 570.584, 35.056, 0.305)
	pt3dadd(223.224, 573.545, 31.619, 0.305)
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  }
}
proc shape3d_14() {
  dend[41] {	pt3dadd(182.963, 443.986, 22.7732, 0.4576)
	pt3dadd(183.307, 444.406, 22.68, 0.4576)
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  }
  axon[0]{
	L = 30
	diam = 1
	nseg = 1 + 2*int(L/40)
  }
  axon[1]{
	L = 30
	diam = 1
	nseg = 1 + 2*int(L/40)
  }
}

proc size_sections() {
	
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

objref all, somatic, axonal, basal, apical
proc append_sections() { local i
	
	objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    for i=0, 42 apic[i] all.append()
    for i=0, 42 dend[i] all.append()
    axon all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0,1 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 42 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 42 apic[i] apical.append()
	
}


external lambda_f
proc set_nseg() {
  	forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

proc mechinit() {
	
	// resting membrane potential. Must lie between Na+ and K+ reversal potentials
	Vrest = -76
	
	// Temperature of simulation
	celsius = 34.0
	
	// Membrane resistance in ohm*cm2
	RmDend = 1/4.81e-4
	RmApic = 1/4.95e-4
	RmSoma = 1/8e-4
	RmAx = 1/4.35e-4
	
	// Membrane capacitance in uF/cm2
	CmSoma = 1.0
	CmAxon = 1.0
	CmDend = 2.37
	CmApic = 2.37

	// Axial resistance in ohm*cm
	RaDend = 195.97
	RaSoma = 195.97	
	RaAx = 195.97
	RaApic = 195.97

	// reversal potentials in mV
	ekval = -107
	enaval = 53
	
	eleakval = Vrest
}

proc insert_mechs() {

  forsec basal{
    Ra = RaDend
    insert pas
    g_pas = 1/RmDend
    e_pas = eleakval
    cm = CmDend
  }
  forsec apical{
    Ra = RaApic
    insert pas
    g_pas = 1/RmApic
    e_pas = eleakval
    cm = CmApic
  }
  forsec axonal{
    Ra = RaAx
    insert pas
    g_pas = 1/RmAx
    e_pas = eleakval
    cm = CmAxon
  }
  forsec somatic {
	  
    insert Im
      gbar_Im = 8.86e-3
    insert Ih
      gbar_Ih = 1.57e-3
    insert NaTs
      gbar_NaTs = 1.39
    insert Nap
      gbar_Nap = 4.87e-2
    insert K_P
      gbar_K_P = 9.84e-1
    insert K_T
      gbar_K_T = 1.83e-1
    insert SK
      gbar_SK = 6.92e-1
    insert Kv3_1
      gbar_Kv3_1 = 1.40
	
    insert Ca_HVA
      gbar_Ca_HVA = 5.22e-4
    insert Ca_LVA
      gbar_Ca_LVA = 4.30e-4
    insert CaDynamics
      gamma_CaDynamics = 2.90e-2
      decay_CaDynamics = 21.6
      depth_CaDynamics = 0.1
      minCai_CaDynamics = 0.0001
	
    insert pas
      g_pas = 1/RmSoma
      e_pas = eleakval
	  cm = CmSoma
  }
	
}

proc set_chanparams() {
	forsec somatic {
		
		ena = enaval
		ek = ekval
		//e_ch_leak = eleakval
		//eca = ecaval
		//cao_iconc_Ca = ca_outside
		
	}
}
/*

	proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma[0] $o2 = new NetCon (&v(1), $o1)
			$o2.threshold = -10

	}

	func is_art()  { return 0 }

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
		for(x,0) {
			if (diam(x) <=0.01) print "WARNING: tiny diameter of ",  diam(x), " um at ", secname(), ", point ", x, "!"
			if (diam3d(x) <=0.01) print "WARNING: tiny 3d diameter of ", diam3d(x), " um at ", secname(), ", point ", x, "!"
		}
		if (L <=0.001) print "WARNING: tiny length of ", L, " um at ", secname(), "!"
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	}
}
strdef myStr

objref newSecRef, syn
proc define_synapses() {
	ind = $1
	i = 0

	access soma[0]
	{distance()}

	for celltype = 0, numCellTypes-1 {
		templist = new List ()
		for r=0, cellType[ind].SynList[celltype].count()-1 {
			execute(cellType[ind].SynList[celltype].object(r).NewSynStr, this) // sets newSecRef
						
			forsec newSecRef {		
				for (x,0) {
					execute(cellType[ind].SynList[celltype].object(r).CondStr, this)
					 if (y==1) {
					
						execute(cellType[ind].SynList[celltype].object(r).SynStr, this)
						if (cellType[ind].SynList[celltype].object(r).GABAabFlag==0) {
							syn.tau1 = cellType[ind].SynList[celltype].object(r).tau1
							syn.tau2 = cellType[ind].SynList[celltype].object(r).tau2
							syn.e = cellType[ind].SynList[celltype].object(r).efirst
							if (strcmp(cellType[ind].SynList[celltype].object(r).SynType,"MyExp2Sidnw")==0) {
								syn.nw = cellType[ind].SynList[celltype].object(r).Scaling
							}
						} else {
							syn.tau1a = cellType[ind].SynList[celltype].object(r).tau1a
							syn.tau2a = cellType[ind].SynList[celltype].object(r).tau2a
							syn.ea = cellType[ind].SynList[celltype].object(r).ea
							syn.tau1b = cellType[ind].SynList[celltype].object(r).tau1b
							syn.tau2b = cellType[ind].SynList[celltype].object(r).tau2b
							syn.eb = cellType[ind].SynList[celltype].object(r).eb
						}
						syn.sid = i
						templist.append(syn)
						i = i + 1
					}
				}
			}
		}
		pre_list.append(templist)
		findme = 1
	}
}
*/
endtemplate cell_313862022
