begintemplate axoaxoniccell
public init, connect_sections, size_sections, append_sections, define_synapses
public mechinit, insert_mechs, set_biophys, get_root
public  pre_list, connect_pre, is_art, is_connected, gid, randi
public soma, dend, axon
public all, basal_list, apical_list, soma_list, axon_list, dendrite_list
public x, y, z, position, myroot, myrootsec, Vrest
public NumSoma, NumApical, NumBasal, NumAxon, NumDend
public gna12_ais_max, gna16_ais_max, gkv_axon, gNav_soma, gKdr_soma, gKdr_dend, gNav_dend

// strings
strdef myroot, myname

// objects
objref syn, pre_list, templist, rootlist, myrootsec, this, rr, rv

// external variables
//external numCellTypes, cellType

// create the sections[segments]
myname = "axoaxonic"

create soma[5], dend[67]



proc init() {
	//gid = $1
	//randi = $2
	
	// morphology
	connect_sections()	// local fcn: connect soma, dendrites, axon initial segment
	size_sections()		// local fcn: set the size dimensions of each section
	define_shape()		// builtin fcn: fill in 3d info for sections defined by only L and diam, translate 3d points for consistency with their connections 
  	append_sections()	// local fcn: append all sections to the section list
	set_nseg()			// local fcn: set the number of segments in each section
	//get_root()			// local fcn: perform morphology checks
	
	// electrophysiology
	mechinit()			// local fcn: set values for max conductances and reversal potentials of ion channels and other ephys parameters that are subject to fitting
	insert_mechs()		// local fcn: insert ion channels and actually set values determined in the mechinit fcn
	set_chanparams()	// local fcn: after all channels have been inserted, then their other parameters can be set	

	// synapses
	pre_list = new List() // define a list for the presynaptic connections	
	//define_synapses($3)	// local fcn: define all possible synaptic connections received by this cell
}


proc connect_sections() {local i
  connect soma[1](0), soma(0.5)
  connect soma[2](0), soma[1](1)
  connect soma[3](0), soma(0.5)
  connect soma[4](0), soma[3](1)
  connect dend(0), soma[2](1)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), dend[1](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend(1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  connect dend[17](0), soma[1](1)
  for i = 18, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  connect dend[22](0), dend[18](1)
  connect dend[23](0), dend[17](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), soma[4](1)
  for i = 27, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  for i = 33, 34 connect dend[i](0), dend[i-1](1)
  connect dend[35](0), dend[33](1)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[35](1)
  connect dend[42](0), dend[32](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), soma(0.5)
  for i = 47, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  connect dend[52](0), dend[46](1)
  for i = 53, 54 connect dend[i](0), dend[i-1](1)
  connect dend[55](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), dend[55](1)
  for i = 58, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  for i = 61, 62 connect dend[i](0), dend[i-1](1)
  connect dend[63](0), dend[61](1)
  connect dend[64](0), dend[60](1)
  connect dend[65](0), dend[57](1)
  connect dend[66](0), dend[52](1)
}


proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-5.885, 0, 0, 11.77)
	pt3dadd(0, 0, 0, 11.77)
	pt3dadd(5.885, 0, 0, 11.77)
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  }
}
proc shape3d_2() {
  dend[9] {	pt3dadd(-66.35, 149.48, -29.83, 0.67)
	pt3dadd(-66.39, 150.82, -30.76, 0.07)
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  }
}
proc shape3d_3() {
  dend[14] {	pt3dadd(-28.39, 197.53, -47.66, 0.37)
	pt3dadd(-27.47, 199.59, -48.04, 1.41)
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  }
}
proc shape3d_4() {
  dend[25] {	pt3dadd(-43.94, -56.17, -21.64, 0.89)
	pt3dadd(-42.91, -57.14, -23.12, 0.96)
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  }
}
proc shape3d_5() {
  dend[34] {	pt3dadd(-59.9, -66.61, -47.93, 0.07)
	pt3dadd(-61.21, -67.27, -47.74, 0.37)
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  }
}
proc shape3d_6() {
  dend[42] {	pt3dadd(17.97, -33.54, -42.58, 1.33)
	pt3dadd(19.76, -34.59, -43.41, 0.52)
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  }
}
proc shape3d_7() {
  dend[48] {	pt3dadd(26.91, 135.4, -71.6, 1.04)
	pt3dadd(26.23, 134.1, -70.99, 0.22)
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  }
}
proc shape3d_8() {
  dend[54] {	pt3dadd(28.67, 106.15, -40.36, 0.3)
	pt3dadd(28.78, 106.84, -40.71, 0.07)
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  }
}
proc shape3d_9() {
  dend[57] {	pt3dadd(16.74, 30.15, -31.04, 0.59)
	pt3dadd(15.86, 28.9, -31.51, 0.37)
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  }
}
proc shape3d_10() {
  dend[62] {	pt3dadd(-111.28, 57.16, -102.63, 0.07)
	pt3dadd(-112.03, 57.6, -103.96, 0.07)
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  }
}

proc size_sections() {
	
	shape3d_1()
    shape3d_2()
    shape3d_3()
    shape3d_4()
    shape3d_5()
    shape3d_6()
    shape3d_7()
    shape3d_8()
    shape3d_9()
    shape3d_10()
	
}

objref all, basal, somatic
proc append_sections() { local i
	
	objref all, somatic, basal
	all = new SectionList()
    for i=0, 4 soma[i] all.append()
    for i=0, 66 dend[i] all.append()

	somatic = new SectionList()
    for i=0, 4 soma[i] somatic.append()

	basal = new SectionList()
    for i=0, 66 dend[i] basal.append()
	
}


external lambda_f
proc set_nseg() {
  	forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

proc mechinit() {
	//objref rv, rr
	//rr = new Random($1+12)
	//rv = new Random($1+199)
	
	// resting membrane potential. Must lie between Na+ and K+ reversal potentials
	Vrest = -59//rv.normal(-61.8,4) //mean, variance
	
	// Temperature of simulation
	celsius = 34.0
	
	// Membrane resistance in ohm*cm2
	randrm = 10000//rr.normal(6000,5760000) //std of 1000
	if(randrm<2000){randrm = 2000} // minimum rm is 2000
	if(randrm>10000){randrm = 10000} // maximum rm is 10000
	
	RmDend = randrm/5
	RmSoma = randrm/5
	RmAx = 1000
	
	// Membrane capacitance in uF/cm2
	CmSoma= 0.8
	CmDend = 0.8

	// Axial resistance in ohm*cm
	RaDend = 100
	RaSoma = 100	
	RaAx = 100
	
	// Calcium concentrations in mM
	ca_outside = 2
	ca_inside = 5.e-6 // 50.e-6
	catau = 10

	// reversal potentials in mV
	ekval = -90
	enaval = 45
	eHCNval = -30
	ecaval = 8.314*(273.15+celsius)/(2*9.649e4)*log(ca_outside/ca_inside)*1000 // about 170, otherwise set to 130
	
	if (Vrest<ekval) Vrest=ekval // Cell cannot rest lower than K+ reversal potential
	if (Vrest>enaval) Vrest=enaval // Cell cannot rest higher than Na+ reversal potential
	eleakval = Vrest

	// max ion channel conductances in mho/cm2
	gNav_soma   = 0.192/2//0.15 // soma: // 0.12 //original 0.030 to .055 ; lm: //0.5  	//original 0.015
	gNav_dend	= gNav_soma/4
	
	gNap_soma	= 0//0.00015
	gNap_dend	= 0//0.00015/2
	
	gKdr_soma   = 0.009/2    // Delayed rectifier potassium
	gKdr_dend   = gKdr_soma / 4//0.0134
	
	gKvA_soma 	= 0 //0.02 //0.00015 // Proximal A-type potassium
	gKvA_dend 	= 0
	
	gCavN_soma  = 0 //0.0008 //   T-type calcium
	gCavN_dend	= 0 //
	
	gCavL_soma  = 0 //  L-type calcium
	gCavL_dend  = 0 //  L-type calcium
	//gKGroup  = 0 //0.1465/1
	//gHCN     = 0 //0.00002 // HCN (hyperpolarization-activated cyclic nucleotide-gated channel)
	//gKvCaB	 = 0//0.0000002 // Big potassium channel: voltage and calcium gated 
	//gKCaS	 = 0//0.000002 //  Small potassium channel: calcium gated

	// axon channels
	gna12_ais_max = 3200   // Nav1.2 
	gna16_ais_max = 3200   // Nav1.6
	gkv_axon = 600
	nash=10	
	
	// Hu et al. half activation voltages
	tha_na16 = -47
	tha_na12 = -30 
	
	// Half activation for somatic channels
	mAlphV_ch_Nav = 45
	mBetaV_ch_Nav = 17
	hAlphV_ch_Nav = 67
	hBetaV_Ch_Nav = 14.5
	nAlphV_ch_Kdrfast = 20
	nBetaV_ch_Kdrfast = 45
}

proc insert_mechs() {

	forsec all {
    Ra = 195.97
    insert pas
      g_pas = 0.000437
      e_pas = -70
	  cm = 1.0
  }
  forsec somatic {
	  /*
    insert Im
      gbar_Im = 0.082637
    insert Ih
      gbar_Ih = 4.95
    insert NaTs
      gbar_NaTs = 0.00135
    insert Nap
      gbar_Nap = 0.910976
    insert K_P
      gbar_K_P = 2.6915
    insert K_T
      gbar_K_T = 0.6397
    insert SK
      gbar_SK = 0.0677
    insert Kv3_1
      gbar_Kv3_1 = 0.09138
    insert Ca_HVA
      gbar_Ca_HVA = 0.00069
    insert Ca_LVA
      gbar_Ca_LVA = 0.0029558
    insert CaDynamics
      gamma_CaDynamics = 0.00427
      decay_CaDynamics = 733
      depth_CaDynamics = 0.1
      minCai_CaDynamics = 0.0001
	  */
    insert pas
      g_pas = 0.000437
      e_pas = -70
  }
	
}

proc set_chanparams() {
	forsec all {
		
		//ena = enaval
		//ek = ekval
		//e_ch_leak = eleakval
		//eca = ecaval
		//cao_iconc_Ca = ca_outside
		
	}
}
/*

	proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma[0] $o2 = new NetCon (&v(1), $o1)
			$o2.threshold = -10

	}

	func is_art()  { return 0 }

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
		for(x,0) {
			if (diam(x) <=0.01) print "WARNING: tiny diameter of ",  diam(x), " um at ", secname(), ", point ", x, "!"
			if (diam3d(x) <=0.01) print "WARNING: tiny 3d diameter of ", diam3d(x), " um at ", secname(), ", point ", x, "!"
		}
		if (L <=0.001) print "WARNING: tiny length of ", L, " um at ", secname(), "!"
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	}
}
strdef myStr

objref newSecRef, syn
proc define_synapses() {
	ind = $1
	i = 0

	access soma[0]
	{distance()}

	for celltype = 0, numCellTypes-1 {
		templist = new List ()
		for r=0, cellType[ind].SynList[celltype].count()-1 {
			execute(cellType[ind].SynList[celltype].object(r).NewSynStr, this) // sets newSecRef
						
			forsec newSecRef {		
				for (x,0) {
					execute(cellType[ind].SynList[celltype].object(r).CondStr, this)
					 if (y==1) {
					
						execute(cellType[ind].SynList[celltype].object(r).SynStr, this)
						if (cellType[ind].SynList[celltype].object(r).GABAabFlag==0) {
							syn.tau1 = cellType[ind].SynList[celltype].object(r).tau1
							syn.tau2 = cellType[ind].SynList[celltype].object(r).tau2
							syn.e = cellType[ind].SynList[celltype].object(r).efirst
							if (strcmp(cellType[ind].SynList[celltype].object(r).SynType,"MyExp2Sidnw")==0) {
								syn.nw = cellType[ind].SynList[celltype].object(r).Scaling
							}
						} else {
							syn.tau1a = cellType[ind].SynList[celltype].object(r).tau1a
							syn.tau2a = cellType[ind].SynList[celltype].object(r).tau2a
							syn.ea = cellType[ind].SynList[celltype].object(r).ea
							syn.tau1b = cellType[ind].SynList[celltype].object(r).tau1b
							syn.tau2b = cellType[ind].SynList[celltype].object(r).tau2b
							syn.eb = cellType[ind].SynList[celltype].object(r).eb
						}
						syn.sid = i
						templist.append(syn)
						i = i + 1
					}
				}
			}
		}
		pre_list.append(templist)
		findme = 1
	}
}
*/
endtemplate axoaxoniccell
